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Filtering:Windowing:WindowingFilter int WindowLength= 0.5s 0.5s % % // Length of window
Filtering:Windowing:WindowingFilter int Detrend= 0 0 0 2 // Detrend data? 0: no, 1: mean, 2: linear (enumeration)
Filtering:Windowing:WindowingFilter int WindowFunction= 0 0 0 3 // Window function 0: Rectangular, 1: Hamming, 2: Hann, 3: Blackman (enumeration)
Filtering:Spectral%20Estimation:ARSpectrum float FirstBinCenter= 0Hz 0Hz % % // Center of first frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARSpectrum float LastBinCenter= 30Hz 30Hz % % // Center of last frequency bin (in Hz)
Filtering:Spectral%20Estimation:ARSpectrum float BinWidth= 3Hz 3Hz % % // Width of spectral bins (in Hz)
Filtering:Spectral%20Estimation:ARSpectrum int OutputType= 0 0 0 2 // 0: Spectral Amplitude, 1: Spectral Power, 2: Coefficients (enumeration)
Filtering:AR%20Spectral%20Estimator:ARSpectrum int ModelOrder= 16 16 0 % // AR model order
Filtering:AR%20Spectral%20Estimator:ARSpectrum int EvaluationsPerBin= 15 15 1 % // Number of uniformly spaced evaluation points entering into a single bin value
Filtering:SpatialFilter int SpatialFilterType= 1 2 0 3 // spatial filter type 0: none, 1: full matrix, 2: sparse matrix, 3: common average reference (CAR) (enumeration)
Filtering:SpatialFilter:SpatialFilter matrix SpatialFilter= 4 4 1 0 0 0 0 1 0 0 0 0 1 0 0 0 0 1 0 % % // columns represent input channels, rows represent output channels
Connector:ConnectorInput list ConnectorInputFilter= 0 // list of state names or signal elements to allow, "*" for any, signal elements as in "Signal(1,0)"
Filtering:SpatialFilter:SpatialFilter intlist SpatialFilterCAROutput= 0 // when using CAR filter type: list of output channels, or empty for all channels
Connector:ConnectorInput string ConnectorInputAddress= % localhost:20320 % % // IP address/port to read from, e.g. localhost:20320
Filtering:SpatialFilter:SpatialFilter int SpatialFilterMissingChannels= 1 0 0 1 // how to handle missing channels 0: ignore, 1: report error (enumeration)
Visualize:Application%20Log:ApplicationBase int ShowAppLog= 1 0 0 1 // Show application log window (boolean)
Filtering:LinearClassifier matrix Classifier= 2 { input%20channel input%20element%20(bin) output%20channel weight } 1 4 1 1 1 6 2 1 // Linear classification matrix in sparse representation
Application:Sequencing:FeedbackTask float PreRunDuration= 2s 2s 0 % // duration of pause preceding first trial
Source:Signal%20Properties:DataIOFilter int SourceCh= 16 16 1 % // number of digitized and stored channels
Filtering:LPFilter float LPTimeConstant= 0 16s 0 % // time constant for the low pass filter
Application:Sequencing:FeedbackTask float PreFeedbackDuration= 2s 2s 0 % // duration of target display prior to feedback
Source:Signal%20Properties:DataIOFilter int SampleBlockSize= 8 32 1 % // number of samples transmitted at a time
Filtering:ExpressionFilter string StartRunExpression= % // expression executed on StartRun
Application:Sequencing:FeedbackTask float FeedbackDuration= 3s 3s 0 % // duration of feedback
Source:Signal%20Properties:DataIOFilter int SamplingRate= 128 256Hz 1 % // sample rate
Filtering:ExpressionFilter string StopRunExpression= % // expression executed on StopRun
Application:Sequencing:FeedbackTask float PostFeedbackDuration= 1s 1s 0 % // duration of result display after feedback
Source:Signal%20Properties:DataIOFilter list ChannelNames= 0 // list of channel names
Filtering:ExpressionFilter matrix Expressions= 0 1 // expressions used to compute the output of the ExpressionFilter (rows are channels; empty matrix for none)
Application:Sequencing:FeedbackTask float ITIDuration= 1s 1s 0 % // duration of inter-trial interval
Source:Signal%20Properties:DataIOFilter floatlist SourceChOffset= 16 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 0 % % // Offset for channels in A/D units
Filtering:Normalizer floatlist NormalizerOffsets= 2 0 0 0 % % // normalizer offsets
Application:Sequencing:FeedbackTask float MinRunLength= 120s 120s 0 % // minimum duration of a run; if blank, NumberOfTrials is used
Source:Signal%20Properties:DataIOFilter floatlist SourceChGain= 16 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 0.003 % % // gain for each channel (A/D units -> muV)
Filtering:Normalizer floatlist NormalizerGains= 2 1 1 0 % % // normalizer gain values
Application:Sequencing:FeedbackTask int NumberOfTrials= % 0 0 % // number of trials; if blank, MinRunLength is used
Storage:Data%20Location:DataIOFilter string DataDirectory= ..\data ..\data % % // path to top level data directory (directory)
Filtering:Normalizer intlist Adaptation= 2 2 2 0 0 2 // 0: no adaptation, 1: zero mean, 2: zero mean, unit variance (enumeration)
Application:Targets:FeedbackTask int NumberTargets= 2 2 0 255 // number of targets
Storage:Session:DataIOFilter string SubjectName= Name Name % % // subject alias
Filtering:Normalizer matrix BufferConditions= 2 1 (Feedback)&&(TargetCode==1) (Feedback)&&(TargetCode==2) // expressions corresponding to data buffers (columns correspond to output channels, multiple rows correspond to multiple buffers)
Application:Targets:FeedbackTask intlist TargetSequence= 0 1 % % // fixed sequence in which targets should be presented (leave empty for random)
Storage:Session:DataIOFilter string SubjectSession= 001 001 % % // three-digit session number
Filtering:Normalizer float BufferLength= 9s 9s % % // time window of past data per buffer that enters into statistic
Application:Window:FingerTask int WindowWidth= 640 640 0 % // width of application window
Storage:Session:DataIOFilter string SubjectRun= 00 00 % % // two-digit run number
Filtering:Normalizer string UpdateTrigger= (Feedback==0) // expression to trigger offset/gain update when changing from 0 (use empty string for continuous update)
Application:Window:FingerTask int WindowHeight= 480 480 0 % // height of application window
Storage:Documentation:DataIOFilter string ID_System= % // BCI2000 System Code
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Application:Window:FingerTask int WindowLeft= 0 0 % % // screen coordinate of application window's left edge
Storage:Documentation:DataIOFilter string ID_Amp= % // BCI2000 Amp Code
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Application:Window:FingerTask int WindowTop= 0 0 % % // screen coordinate of application window's top edge
Storage:Documentation:DataIOFilter string ID_Montage= % // BCI2000 Cap Montage Code
System:Configuration matrix SignalProcessingFilterChain= 6 { Filter%20Name Position%20String } SpatialFilter 2.B ARFilter 2.C LinearClassifier 2.D LPFilter 2.D1 ExpressionFilter 2.D2 Normalizer 2.E // SignalProcessing filter chain (noedit)(readonly)
Application:Cursor:FingerTask int CursorColor= 0xFF0000 0xFF0000 % % // feedback cursor color (color)
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Application:Cursor:FingerTask float CursorWidth= 5 5 0.0 % // feedback cursor width in percent of screen width
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Application:Cursor:FingerTask int CursorNumber= 2 2 1 3 // feedback cursor width in percent of screen width
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Application:Task:FingerTask int TaskPhase= 1 1 1 3 // Phase of Finger Task 
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Application:Task:FingerTask int MinAccTime= 1s 1s 0 % // minimum time to accumulate EEG 
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Application:Task:FingerTask float LowAdjust= 0.0040 0.0040 0.00 0.10 // increment on miss 
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Application:Task:FingerTask float HighAdjust= 0.0080 0.0080 0.00 0.10 // decrement on hit 
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Application:Task:FingerTask float AccLow= -0.4 -0.4 -2.0 2.0 // low value for transition 
Source:gUSBampADC intlist SourceChList= 0 0 1 128 // list of channels to digitize
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Application:Task:FingerTask float AccHigh= 0.4 0.4 -2.0 2.0 // high value for transition 
Source:gUSBampADC intlist SourceChDevices= 1 16 16 1 17 // number of digitized channels per device
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Application:Task:FingerTask int AccControl= 2 2 1 2 // 1 Running Average of EEG  2 Cumulative EEG 
Source:gUSBampADC int NumBuffers= 5 1 2 32 // number of software buffers to use
Application:Task:FingerTask int Min4Move= 250 0 0 5000 // Minimum finger position change for a response 
Source:gUSBampADC string DeviceIDMaster= auto // deviceID for the device whose SYNC goes to the slaves
Application:Task:FingerTask int Max4NotMove= 175 0 0 5000 // Maximum finger position change for no response 
Source:gUSBampADC int FilterEnabled= 1 1 0 1 // Enable pass band filter (0=no, 1=yes)
Robot:Location:FingerTask string FRobotAdr= 129.101.53.73 // FRobot IP address
Source:gUSBampADC float FilterHighPass= 0.1 0.1 0 50 // high pass filter for pass band
Robot:Location:FingerTask string FRobotCOMport= 22222 // FRobot COM port
Source:gUSBampADC float FilterLowPass= 60 60 0 4000 // low pass filter for pass band
Robot:Location:FingerTask string modelName= FingerEAERCtrl // FingerRobot model name
Source:gUSBampADC int FilterModelOrder= 8 8 1 12 // filter model order for pass band
Robot:Assist:FingerTask int FRobotMove= 0 0 0 1 // Assist?  0= none 1= yes 
Source:gUSBampADC int FilterType= 1 1 1 2 // filter type for pass band (1=BUTTERWORTH, 2=CHEBYSHEV)
Robot:Assist:FingerTask float Kp= 2.0 2.0 0 2.0 // Kp ??? 
Source:gUSBampADC int NotchEnabled= 1 1 0 1 // Enable notch (0=no, 1=yes)
Robot:Assist:FingerTask float Kd= 0.2 0.2 0 0.2 // Kd ??? 
Source:gUSBampADC float NotchHighPass= 58 58 0 70 // high pass filter for notch filter
Robot:Assist:FingerTask float MovementDelay= 1000.0 0 0 2000.0 // Delay of movement (msec) after colored targets 
Source:gUSBampADC float NotchLowPass= 62 62 0 4000 // low pass filter for notch filter
Robot:Assist:FingerTask float MovementDuration= 500.0 0 0 1000.0 // Duration (msec) of movement 
Source:gUSBampADC int NotchModelOrder= 4 4 1 10 // filter model order for notch filter
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeStateName= % // State to be translated into keystrokes (0-F), empty for off
Source:gUSBampADC int NotchType= 1 1 1 2 // filter type for pass band (1=CHEBYSHEV, 2=BUTTERWORTH)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpression= % // Expression that evaluates to a virtual keycode, empty for off
Source:gUSBampADC list DeviceIDs= 1 auto // list of USBamps to be used (or auto)
Application:Human%20Interface%20Devices:KeystrokeFilter string KeystrokeExpressionOnStartRun= % // Expression that initializes expression variables on StartRun
Source:gUSBampADC int DigitalInput= 0 0 0 1 // enable digital input:  0: false, 1: true (enumeration)
Connector:ConnectorOutput string ConnectorOutputAddress= % localhost:20321 % % // one or more IP:Port combinations, e.g. localhost:20321
Source:gUSBampADC int DigitalOutput= 0 0 0 1 // enable digital output on block acquisition (boolean)
Application:Localization:Localization string Language= Default Default % % // Language for user messages
Source:gUSBampADC string DigitalOutputEx= % // expression for output on digital output 2 (expression)
Application:Localization:Localization matrix LocalizedStrings= { German } { Timeout Be%20prepared%20... } Inaktiv Achtung%20... // Localized user messages
Source:gUSBampADC int SignalType= 1 0 0 1 // numeric type of output signal:  0: int16, 1: float32 (enumeration)
Source:gUSBampADC int AcquisitionMode= 0 0 0 2 // data acquisition mode:  0: analog signal acquisition, 1: calibration, 2: impedance (enumeration)
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Source:gUSBampADC int CommonGround= 1 0 0 1 // internally connect GNDs from all blocks:  0: false, 1: true (enumeration)
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Source:gUSBampADC int CommonReference= 1 0 0 1 // internally connect Refs from all blocks:  0: false, 1: true (enumeration)
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Storage:Documentation:BCI2000FileWriter string StorageTime= % // time of beginning of data storage
System:Configuration matrix ApplicationFilterChain= 4 { Filter%20Name Position%20String } ConnectorInput 2.9999 FingerTask 3 KeystrokeFilter 3.1 ConnectorOutput 3.9999 // Application filter chain
Source:Alignment:AlignmentFilter int AlignChannels= 1 0 0 1 // align channels in time (0=no, 1=yes)
Source:Alignment:AlignmentFilter floatlist SourceChTimeOffset= 0 0 % % // time offsets for all source channels (may be empty)
Source:Online%20Processing:TransmissionFilter list TransmitChList= 4 1 2 3 4 // list of transmitted channels
System:Additional%20Connections:EventLink int EventLink= 1 1 0 1 // Send events from Operator to Source module (boolean)
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System:Configuration matrix SignalSourceFilterChain= 8 { Filter%20Name Position%20String } DataIOFilter 0 gUSBampADC 1 NullFileWriter 1 BCI2000FileWriter 1 EDFFileWriter 1 GDFFileWriter 1 AlignmentFilter 1.1 TransmissionFilter 1.2 // SignalSource filter chain
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System:Randomization int RandomSeed= 1956 0 % % // seed for the BCI2000 pseudo random number generator (readonly)
System:Randomization int RandomizationWarning= 1 1 0 1 // warn if subsequent Runs have identical RandomSeed value (boolean)
